<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindBehaviorPirouetteDataSchema.Rig;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:AindBehaviorPirouetteDataSchema.Session;assembly=Extensions"
                 xmlns:p3="clr-namespace:AindBehaviorPirouetteDataSchema.TaskLogic;assembly=Extensions"
                 xmlns:onix="clr-namespace:OpenEphys.Onix;assembly=OpenEphys.Onix"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:aeon="clr-namespace:Aeon.Acquisition;assembly=Aeon.Acquisition"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath />
        <RigPath />
        <SessionPath />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorPirouetteRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p2:DeserializeFromJson">
              <p2:Type xsi:type="TypeMapping" TypeArguments="p2:AindBehaviorSessionModel" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p3:DeserializeFromJson">
              <p3:Type xsi:type="TypeMapping" TypeArguments="p3:AindBehaviorPirouetteTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>Onix</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="onix:CreateContext">
                      <onix:Driver>riffa</onix:Driver>
                      <onix:Index>0</onix:Index>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="onix:ConfigureBreakoutBoard">
                      <onix:Name>BreakoutBoard</onix:Name>
                      <onix:Heartbeat>
                        <onix:DeviceName>BreakoutBoard/Heartbeat</onix:DeviceName>
                        <onix:DeviceAddress>0</onix:DeviceAddress>
                        <onix:Enable>true</onix:Enable>
                        <onix:BeatsPerSecond>10</onix:BeatsPerSecond>
                      </onix:Heartbeat>
                      <onix:AnalogIO>
                        <onix:DeviceName>BreakoutBoard/AnalogIO</onix:DeviceName>
                        <onix:DeviceAddress>6</onix:DeviceAddress>
                        <onix:Enable>true</onix:Enable>
                        <onix:InputRange0>TenVolts</onix:InputRange0>
                        <onix:InputRange1>TenVolts</onix:InputRange1>
                        <onix:InputRange2>TenVolts</onix:InputRange2>
                        <onix:InputRange3>TenVolts</onix:InputRange3>
                        <onix:InputRange4>TenVolts</onix:InputRange4>
                        <onix:InputRange5>TenVolts</onix:InputRange5>
                        <onix:InputRange6>TenVolts</onix:InputRange6>
                        <onix:InputRange7>TenVolts</onix:InputRange7>
                        <onix:InputRange8>TenVolts</onix:InputRange8>
                        <onix:InputRange9>TenVolts</onix:InputRange9>
                        <onix:InputRange10>TenVolts</onix:InputRange10>
                        <onix:InputRange11>TenVolts</onix:InputRange11>
                        <onix:Direction0>Input</onix:Direction0>
                        <onix:Direction1>Input</onix:Direction1>
                        <onix:Direction2>Input</onix:Direction2>
                        <onix:Direction3>Input</onix:Direction3>
                        <onix:Direction4>Input</onix:Direction4>
                        <onix:Direction5>Input</onix:Direction5>
                        <onix:Direction6>Input</onix:Direction6>
                        <onix:Direction7>Input</onix:Direction7>
                        <onix:Direction8>Input</onix:Direction8>
                        <onix:Direction9>Input</onix:Direction9>
                        <onix:Direction10>Input</onix:Direction10>
                        <onix:Direction11>Input</onix:Direction11>
                      </onix:AnalogIO>
                      <onix:MemoryMonitor>
                        <onix:DeviceName>BreakoutBoard/MemoryMonitor</onix:DeviceName>
                        <onix:DeviceAddress>10</onix:DeviceAddress>
                        <onix:Enable>false</onix:Enable>
                        <onix:SampleFrequency>10</onix:SampleFrequency>
                      </onix:MemoryMonitor>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="onix:ConfigureHarpSyncInput">
                      <onix:DeviceName>HarpSync</onix:DeviceName>
                      <onix:DeviceAddress>12</onix:DeviceAddress>
                      <onix:Enable>true</onix:Enable>
                      <onix:Source>Breakout</onix:Source>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="onix:ConfigureNeuropixelsV2eHeadstage">
                      <onix:Name>NeuropixelsV2eHeadstage</onix:Name>
                      <onix:NeuropixelsV2>
                        <onix:DeviceName>NeuropixelsV2eHeadstage/NeuropixelsV2e</onix:DeviceName>
                        <onix:DeviceAddress>256</onix:DeviceAddress>
                        <onix:Enable>true</onix:Enable>
                      </onix:NeuropixelsV2>
                      <onix:Bno055>
                        <onix:DeviceName>NeuropixelsV2eHeadstage/NeuropixelsV2eBno055</onix:DeviceName>
                        <onix:DeviceAddress>257</onix:DeviceAddress>
                        <onix:Enable>true</onix:Enable>
                      </onix:Bno055>
                      <onix:Port>PortA</onix:Port>
                      <onix:PortVoltage xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="onix:StartAcquisition">
                      <onix:ReadSize>2048</onix:ReadSize>
                      <onix:WriteSize>2048</onix:WriteSize>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="onix:Bno055Data">
                      <onix:DeviceName>NeuropixelsV2eHeadstage/Bno055</onix:DeviceName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>OnixBno055Data</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="onix:NeuropixelsV2eData">
                      <onix:DeviceName>NeuropixelsV2eHeadstage/NeuropixelsV2e</onix:DeviceName>
                      <onix:BufferSize>30</onix:BufferSize>
                      <onix:ProbeIndex>ProbeA</onix:ProbeIndex>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>OnixNeuropixelData</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="onix:HarpSyncInputData" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>OnixHarpSyncData</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Commutator.bonsai" />
            <Expression xsi:type="GroupWorkflow">
              <Name>HarpDevices</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpOutputExpander</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpOutputExpander.bonsai">
                    <PortName />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpWhiteRabbit</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpWhiteRabbit.bonsai">
                    <PortName>COMx</PortName>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>WhiteRabbitEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="harp:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:MuteReplies>false</harp:MuteReplies>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:Heartbeat>Enabled</harp:Heartbeat>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>WhiteRabbitCommands</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>OutputExpanderCommands</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Cameras</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\CameraController.bonsai" />
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\Cameras.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraState</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CamerasReady</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.3S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CameraState</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Magnetometer.bonsai" />
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RootPath</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogController.bonsai">
              <Path>data</Path>
              <ChunkSize>1</ChunkSize>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\RobocopyRoutine.bonsai" />
            <Expression xsi:type="GroupWorkflow">
              <Name>CamerasLogger</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="rx:Defer">
                    <Name>CamerasLogger</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CameraController</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Cameras</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.VideoWriter</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                        <Expression xsi:type="p1:MatchVideoWriter">
                          <p1:Type xsi:type="TypeMapping" TypeArguments="p1:VideoWriterFfmpeg" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>FfmpegWriter</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>This</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>This</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>ThisCameraName</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>This</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1</Selector>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>ThisWriter</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>CamerasStream</Name>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Key</Selector>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>ThisCameraName</Name>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="Value" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="Equal">
                                      <Operand xsi:type="StringProperty" />
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="4" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source2" />
                                    <Edge From="4" To="5" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Name" DisplayName="Heartbeats" Description="The source of heartbeat signals used as a timing signal for closing groups." Category="GroupClosing" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ChunkSize</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="ChunkSize" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="ClosingDuration" Category="GroupClosing" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="aeon:GroupByTime">
                                  <aeon:ChunkSize>1</aeon:ChunkSize>
                                  <aeon:ClosingDuration>PT30S</aeon:ClosingDuration>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisWriter</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="OutputArguments" Selector="OutputArguments" />
                                  <Property Name="InputArguments" Selector="InputArguments" />
                                  <Property Name="FrameRate" Selector="FrameRate" />
                                  <Property Name="Extension" Selector="ContainerExtension" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisCameraName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Name" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="rx:CreateObservable">
                                <Name>LogVideo</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="rx:AsyncSubject">
                                      <Name>Data</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Data</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Merge" />
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Data</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Key</Selector>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Name" />
                                    </Expression>
                                    <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FormatFileName.bonsai">
                                      <Name>VideoData</Name>
                                      <Extension>csv</Extension>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="FileName" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="io:CsvWriter">
                                      <io:Append>false</io:Append>
                                      <io:Overwrite>false</io:Overwrite>
                                      <io:Suffix>None</io:Suffix>
                                      <io:IncludeHeader>true</io:IncludeHeader>
                                      <io:Selector>Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp</io:Selector>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Value.Image</Selector>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="OutputArguments" />
                                      <Property Name="InputArguments" />
                                      <Property Name="Verbosity" />
                                      <Property Name="FrameRate" />
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Data</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Key</Selector>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Extension" />
                                    </Expression>
                                    <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FormatFileName.bonsai">
                                      <Name>VideoData</Name>
                                      <Extension>avi</Extension>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="FileName" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="p4:FfmpegVideoWriter">
                                        <p4:Overwrite>false</p4:Overwrite>
                                        <p4:FrameRate>0</p4:FrameRate>
                                        <p4:Verbosity>Verbose</p4:Verbosity>
                                        <p4:OutputArguments>-vf "scale=out_color_matrix=bt709:out_range=full" -c:v h264_nvenc -pix_fmt nv12 -color_range full -colorspace bt709 -color_trc linear -tune hq -preset p4 -rc vbr -cq 12 -b:v 0M -maxrate 700M -bufsize 350M</p4:OutputArguments>
                                        <p4:InputArguments>-colorspace rgb -color_primaries bt709 -color_trc linear</p4:InputArguments>
                                      </Combinator>
                                    </Expression>
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="9" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source1" />
                                    <Edge From="5" To="7" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source2" />
                                    <Edge From="6" To="15" Label="Source2" />
                                    <Edge From="7" To="8" Label="Source1" />
                                    <Edge From="8" To="9" Label="Source2" />
                                    <Edge From="9" To="10" Label="Source1" />
                                    <Edge From="10" To="17" Label="Source1" />
                                    <Edge From="11" To="17" Label="Source2" />
                                    <Edge From="12" To="13" Label="Source1" />
                                    <Edge From="13" To="15" Label="Source1" />
                                    <Edge From="14" To="15" Label="Source3" />
                                    <Edge From="15" To="16" Label="Source1" />
                                    <Edge From="16" To="17" Label="Source3" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Switch" />
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="18" Label="Source1" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="14" To="18" Label="Source2" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="18" Label="Source3" />
                              <Edge From="17" To="18" Label="Source4" />
                              <Edge From="18" To="23" Label="Source1" />
                              <Edge From="19" To="20" Label="Source1" />
                              <Edge From="20" To="23" Label="Source2" />
                              <Edge From="21" To="22" Label="Source1" />
                              <Edge From="22" To="23" Label="Source3" />
                              <Edge From="23" To="24" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>CameraController</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Cameras</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.VideoWriter</Selector>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                        <Expression xsi:type="p1:MatchVideoWriter">
                          <p1:Type xsi:type="TypeMapping" TypeArguments="p1:VideoWriterOpenCv" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>OpenCvWriter</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>This</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>This</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>ThisCameraName</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>This</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1</Selector>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>ThisWriter</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>CamerasStream</Name>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Key</Selector>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>ThisCameraName</Name>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="Value" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="Equal">
                                      <Operand xsi:type="StringProperty" />
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="4" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source2" />
                                    <Edge From="4" To="5" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Name" DisplayName="Heartbeats" Description="The source of heartbeat signals used as a timing signal for closing groups." Category="GroupClosing" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ChunkSize</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="ChunkSize" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="ClosingDuration" Category="GroupClosing" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="aeon:GroupByTime">
                                  <aeon:ChunkSize>1</aeon:ChunkSize>
                                  <aeon:ClosingDuration>PT30S</aeon:ClosingDuration>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisWriter</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Extension" Selector="ContainerExtension" />
                                  <Property Name="FrameRate" Selector="FrameRate" />
                                  <Property Name="FourCC" Selector="FourCc" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>ThisCameraName</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Name" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="rx:CreateObservable">
                                <Name>LogVideo</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="rx:AsyncSubject">
                                      <Name>Data</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Data</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Merge" />
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Data</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Key</Selector>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Name" />
                                    </Expression>
                                    <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FormatFileName.bonsai">
                                      <Name>VideoData</Name>
                                      <Extension>csv</Extension>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="FileName" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="io:CsvWriter">
                                      <io:Append>false</io:Append>
                                      <io:Overwrite>false</io:Overwrite>
                                      <io:Suffix>None</io:Suffix>
                                      <io:IncludeHeader>true</io:IncludeHeader>
                                      <io:Selector>Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp</io:Selector>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Value.Image</Selector>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Data</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Key</Selector>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Extension" />
                                    </Expression>
                                    <Expression xsi:type="IncludeWorkflow" Path="Aeon.Acquisition:FormatFileName.bonsai">
                                      <Name>VideoData</Name>
                                      <Extension>avi</Extension>
                                    </Expression>
                                    <Expression xsi:type="PropertyMapping">
                                      <PropertyMappings>
                                        <Property Name="FileName" />
                                      </PropertyMappings>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="FourCC" />
                                      <Property Name="FrameRate" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="cv:VideoWriter">
                                        <cv:Suffix>None</cv:Suffix>
                                        <cv:Buffered>true</cv:Buffered>
                                        <cv:Overwrite>false</cv:Overwrite>
                                        <cv:FourCC>FMP4</cv:FourCC>
                                        <cv:FrameRate>30</cv:FrameRate>
                                        <cv:FrameSize>
                                          <cv:Width>0</cv:Width>
                                          <cv:Height>0</cv:Height>
                                        </cv:FrameSize>
                                        <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                                      </Combinator>
                                    </Expression>
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="9" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source1" />
                                    <Edge From="5" To="7" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source2" />
                                    <Edge From="6" To="14" Label="Source2" />
                                    <Edge From="7" To="8" Label="Source1" />
                                    <Edge From="8" To="9" Label="Source2" />
                                    <Edge From="9" To="10" Label="Source1" />
                                    <Edge From="10" To="17" Label="Source1" />
                                    <Edge From="11" To="12" Label="Source1" />
                                    <Edge From="12" To="14" Label="Source1" />
                                    <Edge From="13" To="14" Label="Source3" />
                                    <Edge From="14" To="15" Label="Source1" />
                                    <Edge From="15" To="17" Label="Source2" />
                                    <Edge From="16" To="17" Label="Source3" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Switch" />
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="18" Label="Source1" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="14" To="18" Label="Source2" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="18" Label="Source3" />
                              <Edge From="17" To="18" Label="Source4" />
                              <Edge From="18" To="23" Label="Source1" />
                              <Edge From="19" To="20" Label="Source1" />
                              <Edge From="20" To="23" Label="Source2" />
                              <Edge From="21" To="22" Label="Source1" />
                              <Edge From="22" To="23" Label="Source3" />
                              <Edge From="23" To="24" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="2" To="6" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="12" To="16" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="17" Label="Source1" />
                        <Edge From="16" To="17" Label="Source2" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpLogging.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\CommutatorLogging.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\OnixLogging.bonsai" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Visualizers.bonsai" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>